PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = DataCollectionExperiment
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    SoundComponent auditory_stimulus
      forceEndRoutine = False
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent word_of_interest
      letterHeight = 0.3
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text [set every repeat] = $words
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    TextComponent cool_off_text
      letterHeight = 0.2
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 1.5
      text = COOL OFF
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = words.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('words', 'water'), ('audio', 'a')]),
      OrderedDict([('words', 'food'), ('audio', 'a')]),
      OrderedDict([('words', 'yes'), ('audio', 'a')]),
      OrderedDict([('words', 'no'), ('audio', 'a')])]
    Routine trial
  LoopTerminator trials
